PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MCF_Project
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Routines
  Routine Experiment
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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    ImageComponent Stimu_files
      image [set every repeat] = $Stim_file
      pos = (0, 0.05)
      size = (1.0, 0.5)
      startVal [time (s)] = 0.5
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = "very negative", "negative", "neutral", "positive", "very positive"
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Test
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = "very negative", "negative", "neutral", "positive", "very positive"
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 5.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      text [set every repeat] = Move the scale to "very positive"
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    ImageComponent image_2
      image = Instruc.png
      size = (1.0, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine PracticeEnd
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The real trials will now begin. Use the slider to indicate the valence of the emotion each image or vignette evokes.
        Press the 'space' key when you are happy with your answer and want to move onto the next image/vignette!

        Please press the 'y' key to begin the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent Welcome_screen
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Welcome to the experiment!
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 3.5
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      text:
        The current experiment consists of two parts.
        The first part of this experiment is a cognitive task consisting of 10 images and 10 vignettes.
        The second part of this experiment is the Toronto Alexithymia Scale (TAS-20).

        Press 'y' to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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  Routine Goodbye
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Thank you for taking part in the experiment!

        Have a great day!
  Routine firstInst
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with 10 vignettes (a brief account of a situation) and 10 images, in a randomized order. You will be required to respond with the degree of positive or negative emotions evoked using a slider.
        Before the experiment starts, you will be able to test how the slider works.

        Press the 'y' key if you understand the instructions and want to move forward.
    KeyboardComponent key_resp_6
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine secondInst
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The second section of this experiment will now begin.
        In this part of this experiment you will answer the child version of the Alexythymia questionnaire using a five point scale.

        Press 'y' to continue.
    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PartOne_2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = "very negative", "negative", "neutral", "positive", "very positive"
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine firstInst
  Routine Test
  Routine PracticeEnd
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Project_measuringcog.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Emotion': 'neg', 'Stim_type': 'Image', 'Stim_file': 'np1.jpg'},
      {'Emotion': 'neg', 'Stim_type': 'Image', 'Stim_file': 'np2.jpg'},
      {'Emotion': 'neg', 'Stim_type': 'Image', 'Stim_file': 'np3.webp'},
      {'Emotion': 'neg', 'Stim_type': 'Image', 'Stim_file': 'np4.jpg'},
      {'Emotion': 'neg', 'Stim_type': 'Image', 'Stim_file': 'np5.jpg'},
      {'Emotion': 'pos', 'Stim_type': 'Image', 'Stim_file': 'pp1.jpg'},
      {'Emotion': 'pos', 'Stim_type': 'Image', 'Stim_file': 'pp2.jpg'},
      {'Emotion': 'pos', 'Stim_type': 'Image', 'Stim_file': 'pp3.jpg'},
      {'Emotion': 'pos', 'Stim_type': 'Image', 'Stim_file': 'pp4.png'},
      {'Emotion': 'pos', 'Stim_type': 'Image', 'Stim_file': 'pp5.jpg'},
      {'Emotion': 'neg', 'Stim_type': 'Vignette', 'Stim_file': 'Negative1.png'},
      {'Emotion': 'neg', 'Stim_type': 'Vignette', 'Stim_file': 'Negative2.png'},
      {'Emotion': 'neg', 'Stim_type': 'Vignette', 'Stim_file': 'Negative3.png'},
      {'Emotion': 'neg', 'Stim_type': 'Vignette', 'Stim_file': 'Negative4.png'},
      {'Emotion': 'neg', 'Stim_type': 'Vignette', 'Stim_file': 'Negative5.png'},
      {'Emotion': 'pos', 'Stim_type': 'Vignette', 'Stim_file': 'Positive1.png'},
      {'Emotion': 'pos', 'Stim_type': 'Vignette', 'Stim_file': 'Positive2.png'},
      {'Emotion': 'pos', 'Stim_type': 'Vignette', 'Stim_file': 'Positive3.png'},
      {'Emotion': 'pos', 'Stim_type': 'Vignette', 'Stim_file': 'Positive4.png'},
      {'Emotion': 'pos', 'Stim_type': 'Vignette', 'Stim_file': 'Positive5.png'}]
    Routine Experiment
  LoopTerminator trials
  Routine secondInst
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TAS.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Number': 1, 'Question': 'I am often confused about what emotions I am feeling'},
      {'Number': 2, 'Question': 'It is difficult for me to find the right words for my feelings'},
      {'Number': 3, 'Question': "I have physical sensations that even doctors don't understand"},
      {'Number': 4, 'Question': 'I am able to describe my feelings easily'},
      {'Number': 5, 'Question': 'I prefer to analyse problems rather than just describe them'},
      {'Number': 6, 'Question': 'When I am upset I don’t know if I am sad, frightened, or angry'},
      {'Number': 7, 'Question': 'I am often puzzeled by sensations in my body'},
      {'Number': 8, 'Question': 'I prefer to just let things happen rather than to understand why they turned out that way'},
      {'Number': 9, 'Question': "I have feelings that I can't quite identify"},
      {'Number': 10, 'Question': 'Being in touch with emotions is essential'},
      {'Number': 11, 'Question': 'I find it hard to describe how I feel about people'},
      {'Number': 12, 'Question': 'People tell me to describe my feelings more'},
      {'Number': 13, 'Question': "I don’t know what's going on inside me"},
      {'Number': 14, 'Question': 'I often don’t know why I am angry'},
      {'Number': 15, 'Question': 'I prefer talking to people about their daily activities rather than their feelings'},
      {'Number': 16, 'Question': 'I prefer to watch "light" entertainment shows rather than psychological dramas'},
      {'Number': 17, 'Question': 'It is difficult for me to reveal my inner most feelings even to close friends'}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
    Routine PartOne_2
  LoopTerminator trials_2
  Routine Goodbye
